PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = image-sentiment-online
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $imagePaths
      size = (1, 1)
      startVal [time (s)] = 1.
      stopVal [duration (s)] = 1.0
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    TextComponent textQuestionEmo
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
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      text:
        画像に感じた感情を選んでください。

        hoge hoge hgoe
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2
      store = all keys
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    TextComponent textGazePoint
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent textQuestionRecog
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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      text:
        画像中にあったオブジェクトを選んでください

        hoge hoge hoge
        hoge hoge hoge
    KeyboardComponent keyQuestionRecog
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('imagePaths', '0020.jpg')]),
      OrderedDict([('imagePaths', '0100.jpg')]),
      OrderedDict([('imagePaths', '0290.jpg')]),
      OrderedDict([('imagePaths', '0330.jpg')]),
      OrderedDict([('imagePaths', '0410.jpg')]),
      OrderedDict([('imagePaths', '0420.jpg')]),
      OrderedDict([('imagePaths', '0540.jpg')]),
      OrderedDict([('imagePaths', '0570.jpg')])]
    Routine trial
  LoopTerminator trials
